/* converted by pv 30/9/98

 Data published in:

 Rihn, L. and  Claiborne, B.J.  Dendritic growth and regression 
in rat dentate granule cells during late postnatal development.  
Dev. Brain Research 54 (1990) 115-124.

Dentate Granule Cell:

Labeling Method: Intracellular injection using HRP filled 
                 sharp electrodes in thick 400um thick
                 whole-mounts.

Cell id: 411884b.out 

Animal:  Sprague Dawley Rat  obtained from Harlan Sprague Dawley

Age of animal:  Postnatal day   38

*Location:  Suprapyramidal blade of the dentate gyrus

   		-- Layer position of cell     2.3    

                     (0 bottom - 6 top of cell body layer)
		
                -- Blade Position of cell     3.5    
                     
                     (0 near crest - 6 tip of suprapyramidal blade)

* A gradient referring to the location of the cell.   
	dummy = fscan()


 */


seg= 230
sommax = 4 
                                                /* variable arrayvals */
double comp[seg],pare[seg],xval[seg],yval[seg],zval[seg],len[seg],dia[seg]
double peakit[seg]
create dend[seg]                                /* creates the comparetments */
create soma

proc geometry() { 
 
for i=0,seg-1 {                                 /* read in variables */
		comp[i] = fscan()
	        pare[i] = fscan()
		dummy = fscan()
	        xval[i] = fscan()
        	yval[i] = fscan()
	        zval[i] = fscan()
        	dia[i] = fscan() 
	        len[i] = fscan()
		dummy_termination = fscan()
		}
 
  
soma { 	for i = 0,sommax {   pt3dadd(xval[i],yval[i],zval[i],dia[i]) }
	nseg = int(L/5)
     }	


 for i=sommax+1,seg-1 {                                 /* all other comparetments */
         	dend[i] {
			nseg=1 
			pt3dadd(xval[pare[i]],yval[pare[i]],zval[pare[i]],dia[pare[i]])
			pt3dadd(xval[i],yval[i],zval[i],dia[i]) 	
			}
 		}
  
 for i=1,seg-1 {  if (pare[i] > sommax) dend[pare[i]] connect dend[i](0),1 else {

					 soma	       connect dend[i](0),pare[i]/sommax } 
		}

for i = 0,sommax { dend[i] delete_section() }

}

geometry()

SOMA

0	-1	1	0.2	-0.2	0	4.51	0.01	0
1	0	2	0.99	4.31	0	8.11	4.57867	0
2	1	3	2.32	8.59	0	9.91	4.48189	0
3	2	4	3.38	14.44	-3.44	4.96	6.86875	0
4	3	10	2.01	20.4	-2.7	3.6	6.16004	0


DENDRITIC TREE

5	4	11	1.74	24.68	-2.7	3.6	4.28851	0
6	5	12	2.01	27.61	-2.7	3.15	2.94241	-1
7	6	18	2.01	34.59	-2.7	3.15	6.98	0
8	7	17	1.74	33.69	-2.7	3.15	0.939628	0
9	8	19	2.01	35.04	-2.29	2.25	1.43649	0
10	9	20	1.74	36.17	-3.93	2.25	2.00983	-1
11	10	21	3.33	40.23	-0.15	2.7	5.77062	0
12	11	22	2.54	51.69	4.42	2.7	12.3629	0
13	12	23	2.81	56.87	8.18	2.7	6.40647	0
14	13	24	3.07	62.5	8.18	2.7	5.636	0
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229	6	16	1.74	29.41	-2.7	3.15	1.82014	-2













